CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Plants
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:Plants
    Name the output image:ResizedImage
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

InvertForPrinting:[module_num:6|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
    Input image type:Color
    Use a red image?:Yes
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    Use a green image?:Yes
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    Use a blue image?:Yes
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    Select the color image:ResizedImage
    Output image type:Color
    Select <i>Yes</i> to produce a red image.:Yes
    Name the red image:InvertedRed
    Select <i>Yes</i> to produce a green image.:Yes
    Name the green image:InvertedGreen
    Select <i>Yes</i> to produce a blue image.:Yes
    Name the blue image:InvertedBlue
    Name the inverted color image:InvertedImage

ColorToGray:[module_num:7|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
    Select the input image:InvertedImage
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:2.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:OrigGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:9|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath2
    Image or measurement?:Image
    Select the first image:OrigGray
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ImageAfterMath
    Multiply the second image by:1.0
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
ImageMath:[module_num:10|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath3
    Image or measurement?:Image
    Select the first image:ImageAfterMath2
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath4
    Image or measurement?:Image
    Select the first image:ImageAfterMath2
    Multiply the first image by:1.4
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    Image or measurement?:Image
    Select the second image:ImageAfterMath3
    Multiply the second image by:1.0
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
ImageMath:[module_num:12|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath5
    Image or measurement?:Image
    Select the first image:ImageAfterMath4
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ApplyThreshold:[module_num:13|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
    Select the input image:ImageAfterMath4
    Name the output image:ThreshBlue
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Automatic
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
EnhanceOrSuppressFeatures:[module_num:14|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enabled:False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
    Select the input image:ImageAfterMath4
    Name the output image:FilteredBlue
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:10,30
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:ImageAfterMath4
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:17|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
    Name the output objects:FilteredBlue
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:Yes
    Maximum value:1

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ResizedImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredBlue

MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:FilteredBlue
    Calculate the Zernike features?:Yes

CalculateMath:[module_num:20|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
    Name the output measurement:Corrected_Area
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:FilteredBlue
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:0.38
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:21|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
    Name the output measurement:CorrectedPerimeter
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:FilteredBlue
    Select the numerator measurement:AreaShape_Perimeter
    Multiply the above operand by:0.38
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Plants
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Input Folder sub-folder|Desktop/Ewers samples/Panama Test Set/Jack O Lantern/Vessel Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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