CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Plants
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:Plants
    Name the output image:ResizedBlue
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

InvertForPrinting:[module_num:6|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enabled:False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
    Input image type:Color
    Use a red image?:Yes
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    Use a green image?:Yes
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    Use a blue image?:Yes
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    Select the color image:ResizedBlue
    Output image type:Color
    Select <i>Yes</i> to produce a red image.:Yes
    Name the red image:InvertedRed
    Select <i>Yes</i> to produce a green image.:Yes
    Name the green image:InvertedGreen
    Select <i>Yes</i> to produce a blue image.:Yes
    Name the blue image:InvertedBlue
    Name the inverted color image:InvertedColor

ColorToGray:[module_num:7|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
    Select the input image:ResizedBlue
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:OrigGray
    Name the output image:FilteredBlue
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:1,10
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:FilteredBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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
    Name the output objects:FilteredBlue
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:Yes
    Maximum value:1

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:FilteredBlue
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Plants
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Elsewhere...|/Volumes/NO NAME/test3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ResizedBlue
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:5
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:FilteredBlue

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Plants
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Elsewhere...|/Volumes/NO NAME/test3
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:FilteredBlue
    Calculate the Zernike features?:Yes

CalculateMath:[module_num:16|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
    Name the output measurement:Corrected_Area
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:FilteredBlue
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:0.38
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:17|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
    Name the output measurement:CorrectedPerimeter
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:FilteredBlue
    Select the numerator measurement:AreaShape_Perimeter
    Multiply the above operand by:0.38
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|/Volumes/NO NAME/test3
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :FilteredBlue|Number_Object_Number,FilteredBlue|AreaShape_Perimeter,FilteredBlue|AreaShape_MeanRadius,FilteredBlue|AreaShape_MedianRadius,FilteredBlue|AreaShape_Eccentricity,FilteredBlue|AreaShape_MaximumRadius,FilteredBlue|AreaShape_Area,FilteredBlue|AreaShape_MajorAxisLength,FilteredBlue|Math_Corrected_Area,FilteredBlue|Math_CorrectedPerimeter,Image|FileName_Plants,Image|Metadata_Date,Image|Metadata_FileLocation,Experiment|Run_Timestamp
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
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